PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = AudioVisualExpectation
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Routines
  Routine Validity100Trial
    CodeComponent shuffleJS
      Code Type = JS
      Begin JS Experiment:
        function shuffle(a) {
            var j, x, i;
            for (i = a.length - 1; i > 0; i--) {
                j = Math.floor(Math.random() * (i + 1));
                x = a[i];
                a[i] = a[j];
                a[j] = x;
            }
            return a;
        }
    CodeComponent positioner
      Code Type = Auto->JS
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      Begin Experiment:
        targetPos=[0.4,-0.4]
        targetDur=list([1, 2, 3, 4, 5])
        currentDur=np.random.choice(targetDur)
        accuracy=[]
        durMask=4
      Begin Routine:
        shuffle(targetPos)
    CodeComponent randımizer
      Code Type = JS
      disabled = True
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      Begin JS Experiment:
        var index = Math.floor(Math.random() * targetDur.length);
        currentDur=targetDur[index];
    ImageComponent target
      image [set every repeat] = $targetFile
      pos [set every repeat] = (targetPos[1], 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 2
      stopVal [duration (frames)] = currentDur
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    ImageComponent distractor
      image [set every repeat] = $maskFile
      pos [set every repeat] = (-targetPos[1],0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 2
      stopVal [duration (frames)] = currentDur
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    ImageComponent maskLeft
      image [set every repeat] = $maskFile
      pos [set every repeat] = (-0.4, 0)
      size = (0.4, 0.4)
      startVal [frame N] = (expInfo['frameRate']*2)+currentDur
      stopVal [duration (frames)] = durMask
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    ImageComponent maskRight
      image [set every repeat] = $maskFile
      pos [set every repeat] = (0.4, 0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [frame N] = (expInfo['frameRate']*2)+currentDur
      stopVal [duration (frames)] = durMask
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    SoundComponent Cue
      saveStartStop = False
      sound [set every repeat] = $cueFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = (expInfo['frameRate']*2)+currentDur+durMask+0.0001
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  Routine Validity75Trial
    CodeComponent randımizer_2
      Code Type = JS
      disabled = True
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      Begin JS Experiment:
        var index = Math.floor(Math.random() * targetDur.length);
        currentDur=targetDur[index];
    ImageComponent target_2
      image [set every repeat] = $targetFile
      pos [set every repeat] = (targetPos[1], 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 2
      stopVal [duration (frames)] = currentDur
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    ImageComponent distractor_2
      image [set every repeat] = $maskFile
      pos [set every repeat] = (-targetPos[1],0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 2
      stopVal [duration (frames)] = currentDur
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    ImageComponent maskLeft_2
      image [set every repeat] = $maskFile
      pos [set every repeat] = (-0.4, 0)
      size = (0.4, 0.4)
      startVal [frame N] = (expInfo['frameRate']*2)+currentDur
      stopVal [duration (frames)] = durMask
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    ImageComponent maskRight_2
      image [set every repeat] = $maskFile
      pos [set every repeat] = (0.4, 0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [frame N] = (expInfo['frameRate']*2)+currentDur
      stopVal [duration (frames)] = durMask
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    SoundComponent Cue_2
      saveStartStop = False
      sound [set every repeat] = $cueFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent fixation_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = (expInfo['frameRate']*2)+currentDur+durMask+0.0001
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  Routine Validity50Trial
    CodeComponent randımizer_3
      Code Type = JS
      disabled = True
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      Begin JS Experiment:
        var index = Math.floor(Math.random() * targetDur.length);
        currentDur=targetDur[index];
    ImageComponent target_3
      image [set every repeat] = $targetFile
      pos [set every repeat] = (targetPos[1], 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 2
      stopVal [duration (frames)] = currentDur
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    ImageComponent distractor_3
      image [set every repeat] = $maskFile
      pos [set every repeat] = (-targetPos[1],0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 2
      stopVal [duration (frames)] = currentDur
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    ImageComponent maskLeft_3
      image [set every repeat] = $maskFile
      pos [set every repeat] = (-0.4, 0)
      size = (0.4, 0.4)
      startVal [frame N] = (expInfo['frameRate']*2)+currentDur
      stopVal [duration (frames)] = durMask
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    ImageComponent maskRight_3
      image [set every repeat] = $maskFile
      pos [set every repeat] = (0.4, 0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [frame N] = (expInfo['frameRate']*2)+currentDur
      stopVal [duration (frames)] = durMask
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    SoundComponent Cue_3
      saveStartStop = False
      sound [set every repeat] = $cueFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent fixation_3
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = (expInfo['frameRate']*2)+currentDur+durMask+0.0001
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  Routine NeutralTrial
    CodeComponent randımizer_4
      Code Type = JS
      disabled = True
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      Begin JS Experiment:
        var index = Math.floor(Math.random() * targetDur.length);
        currentDur=targetDur[index];
    ImageComponent target_4
      image [set every repeat] = $targetFile
      pos [set every repeat] = (targetPos[1], 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.2
      stopVal [duration (frames)] = currentDur
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    ImageComponent distractor_4
      image [set every repeat] = $maskFile
      pos [set every repeat] = (-targetPos[1],0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.2
      stopVal [duration (frames)] = currentDur
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    ImageComponent maskLeft_4
      image [set every repeat] = $maskFile
      pos [set every repeat] = (-0.4, 0)
      size = (0.4, 0.4)
      startVal [frame N] = (expInfo['frameRate']*0.2)+currentDur
      stopVal [duration (frames)] = durMask
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    ImageComponent maskRight_4
      image [set every repeat] = $maskFile
      pos [set every repeat] = (0.4, 0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [frame N] = (expInfo['frameRate']*0.2)+currentDur
      stopVal [duration (frames)] = durMask
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    PolygonComponent fixation_4
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = (expInfo['frameRate']*2)+currentDur+durMask+0.0001
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  Routine Response100
    KeyboardComponent response_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent compare_2
      Code Type = Auto->JS
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      Begin Experiment:
        feedback=""
      End Routine:
        if targetPos[1]>0:
            if response_2.keys=='right':
                feedback="Doğru"
                accuracy.append(1)
                deneme.addData('Accuracy', 1)
            elif response_2.keys=='left':
                feedback="Yanlış"
                accuracy.append(0)
                deneme.addData('Accuracy', 0)

        elif targetPos[1]<0:
            if response_2.keys=='left':
                feedback="Doğru"
                accuracy.append(1)
                deneme.addData('Accuracy', 1)
            elif response_2.keys=='right':
                feedback="Yanlış"
                accuracy.append(0)
                deneme.addData('Accuracy', 0)
    PolygonComponent fixation_response_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2+currentDur+durMask+0.0001
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  Routine Feedback75
    TextComponent feedBackScreen_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback
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    CodeComponent staircase_and_record_2
      Code Type = Auto->JS
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      Begin Experiment:
        #trialNumLoop100=0
        #numStaricase=30
        #trialCongruency=""
        #congDur=[]
        #incongDur=[]
      Begin Routine:
        Loop75.addData('TargetDuration', currentDur*frameDur)

        #def staircase():
           # global accuracy
            #global currentDur
        if accuracy[-1]==0:
            currentDur=currentDur+1
        elif currentDur>1 and len(accuracy)>=2:
            if accuracy[-1]==1 and accuracy[-2]==1:
                currentDur=currentDur-1
        else:
            currentDur=currentDur
        #return currentDur


        #if trialNumLoop100%numStaricase<30:
        #currentDur=staircase()
        if cueFile[7:11] in targetFile[7:11]:
            trialCongruency="congruent"
            congDur.append(target.tStopRefresh-target.tStartRefresh)
            incongDur.append(None)
            Loop75.addData('incongruentTrialDuration', incongDur[trialNumLoop100])
            Loop75.addData('congruentTrialDuration', congDur[trialNumLoop100])

        elif cueFile[7:11] not in targetFile[7:11]:
            trialCongruency="incongruent"
            incongDur.append(target.tStopRefresh-target.tStartRefresh)
            congDur.append(None)
            Loop75.addData('congruentTrialDuration', congDur[trialNumLoop100])
            Loop75.addData('incongruentTrialDuration', incongDur[trialNumLoop100])


        Loop75.addData('isCongruent', trialCongruency)
        trialNumLoop100=trialNumLoop100+1
  Routine Response75
    KeyboardComponent response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent compare
      Code Type = Auto->JS
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      Begin Experiment:
        #feedback=""
      End Routine:
        if targetPos[1]>0:
            if response.keys=='right':
                feedback="Doğru"
                accuracy.append(1)
                Loop75.addData('Accuracy', 1)
            elif response.keys=='left':
                feedback="Yanlış"
                accuracy.append(0)
                Loop75.addData('Accuracy', 0)

        elif targetPos[1]<0:
            if response.keys=='left':
                feedback="Doğru"
                accuracy.append(1)
                Loop75.addData('Accuracy', 1)
            elif response.keys=='right':
                feedback="Yanlış"
                accuracy.append(0)
                Loop75.addData('Accuracy', 0)
    PolygonComponent fixation_response
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2+currentDur+durMask+0.0001
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  Routine Response50
    KeyboardComponent response_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent compare_3
      Code Type = Auto->JS
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      Begin Experiment:
        #feedback=""
      End Routine:
        if targetPos[1]>0:
            if response_3.keys=='right':
                feedback="Doğru"
                accuracy.append(1)
                Loop50.addData('Accuracy', 1)
            elif response_3.keys=='left':
                feedback="Yanlış"
                accuracy.append(0)
                Loop50.addData('Accuracy', 0)

        elif targetPos[1]<0:
            if response_3.keys=='left':
                feedback="Doğru"
                accuracy.append(1)
                Loop50.addData('Accuracy', 1)
            elif response_3.keys=='right':
                feedback="Yanlış"
                accuracy.append(0)
                Loop50.addData('Accuracy', 0)
    PolygonComponent fixation_response_3
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2+currentDur+durMask+0.0001
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  Routine Feedback100
    TextComponent feedBackScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback
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    VariableComponent trialNumLoop100
      saveStartStop = False
      startExpValue = 0
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    VariableComponent numStaricase
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 30
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    VariableComponent trialCongruency
      saveEndRoutine = False
      saveStartStop = False
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    CodeComponent staircase_and_record
      Code Type = Auto->JS
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      Begin Experiment:
        trialNumLoop100=0
        numStaricase=30
        trialCongruency=""
        congDur=[]
        incongDur=[]
      Begin Routine:
        deneme.addData('TargetDuration', currentDur*frameDur)

        #def staircase():
           # global accuracy
            #global currentDur
        if accuracy[-1]==0:
            currentDur=currentDur+1
        elif currentDur>1 and len(accuracy)>=2:
            if accuracy[-1]==1 and accuracy[-2]==1:
                currentDur=currentDur-1
        else:
            currentDur=currentDur
        #return currentDur


        #if trialNumLoop100%numStaricase<30:
        #currentDur=staircase()
        if cueFile[7:11] in targetFile[7:11]:
            trialCongruency="congruent"
            congDur.append(target.tStopRefresh-target.tStartRefresh)
            incongDur.append(None)
            deneme.addData('incongruentTrialDuration', incongDur[trialNumLoop100])
            deneme.addData('congruentTrialDuration', congDur[trialNumLoop100])

        elif cueFile[7:11] not in targetFile[7:11]:
            trialCongruency="incongruent"
            incongDur.append(target.tStopRefresh-target.tStartRefresh)
            congDur.append(None)
            deneme.addData('congruentTrialDuration', congDur[trialNumLoop100])
            deneme.addData('incongruentTrialDuration', incongDur[trialNumLoop100])


        deneme.addData('isCongruent', trialCongruency)
        trialNumLoop100=trialNumLoop100+1
  Routine Feedback50
    TextComponent feedBackScreen_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback
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    CodeComponent staircase_and_record_3
      Code Type = Auto->JS
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      Begin Experiment:
        #trialNumLoop100=0
        #numStaricase=30
        #trialCongruency=""
        #congDur=[]
        #incongDur=[]
      Begin Routine:
        Loop50.addData('TargetDuration', currentDur*frameDur)

        #def staircase():
           # global accuracy
            #global currentDur
        if accuracy[-1]==0:
            currentDur=currentDur+1
        elif currentDur>1 and len(accuracy)>=2:
            if accuracy[-1]==1 and accuracy[-2]==1:
                currentDur=currentDur-1
        else:
            currentDur=currentDur
        #return currentDur


        #if trialNumLoop100%numStaricase<30:
        #currentDur=staircase()
        if cueFile[7:11] in targetFile[7:11]:
            trialCongruency="congruent"
            congDur.append(target.tStopRefresh-target.tStartRefresh)
            incongDur.append(None)
            Loop50.addData('incongruentTrialDuration', incongDur[trialNumLoop100])
            Loop50.addData('congruentTrialDuration', congDur[trialNumLoop100])

        elif cueFile[7:11] not in targetFile[7:11]:
            trialCongruency="incongruent"
            incongDur.append(target.tStopRefresh-target.tStartRefresh)
            congDur.append(None)
            Loop50.addData('congruentTrialDuration', congDur[trialNumLoop100])
            Loop50.addData('incongruentTrialDuration', incongDur[trialNumLoop100])


        Loop50.addData('isCongruent', trialCongruency)
        trialNumLoop100=trialNumLoop100+1
  Routine FeedbackNeutral
    TextComponent feedBackScreen_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback
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    CodeComponent staircase_and_record_4
      Code Type = Auto->JS
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      Begin Experiment:
        #trialNumLoop100=0
        #numStaricase=30
        #trialCongruency=""
        #congDur=[]
        #incongDur=[]
      Begin Routine:
        LoopNeutral.addData('TargetDuration', currentDur*frameDur)

        #def staircase():
           # global accuracy
            #global currentDur
        if accuracy[-1]==0:
            currentDur=currentDur+1
        elif currentDur>1 and len(accuracy)>=2:
            if accuracy[-1]==1 and accuracy[-2]==1:
                currentDur=currentDur-1
        else:
            currentDur=currentDur
        #return currentDur


        #if trialNumLoop100%numStaricase<30:
        #currentDur=staircase()
        if cueFile[7:11] in targetFile[7:11]:
            trialCongruency="congruent"
            congDur.append(target.tStopRefresh-target.tStartRefresh)
            incongDur.append(None)
            LoopNeutral.addData('incongruentTrialDuration', incongDur[trialNumLoop100])
            LoopNeutral.addData('congruentTrialDuration', congDur[trialNumLoop100])

        elif cueFile[7:11] not in targetFile[7:11]:
            trialCongruency="incongruent"
            incongDur.append(target.tStopRefresh-target.tStartRefresh)
            congDur.append(None)
            LoopNeutral.addData('congruentTrialDuration', congDur[trialNumLoop100])
            LoopNeutral.addData('incongruentTrialDuration', incongDur[trialNumLoop100])


        LoopNeutral.addData('isCongruent', trialCongruency)
        trialNumLoop100=trialNumLoop100+1
  Routine ResponseNeutral
    KeyboardComponent response_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent compare_4
      Code Type = Auto->JS
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      Begin Experiment:
        #feedback=""
      End Routine:
        if targetPos[1]>0:
            if response_3.keys=='right':
                feedback="Doğru"
                accuracy.append(1)
                LoopNeutral.addData('Accuracy', 1)
            elif response_3.keys=='left':
                feedback="Yanlış"
                accuracy.append(0)
                LoopNeutral.addData('Accuracy', 0)

        elif targetPos[1]<0:
            if response_3.keys=='left':
                feedback="Doğru"
                accuracy.append(1)
                LoopNeutral.addData('Accuracy', 1)
            elif response_3.keys=='right':
                feedback="Yanlış"
                accuracy.append(0)
                LoopNeutral.addData('Accuracy', 0)
    PolygonComponent fixation_response_4
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2+currentDur+durMask+0.0001
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  Routine Instruction100
    TextComponent Instrcution100
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1.Aşama: (%100 UYUMLU) Bu aşamadaki duyacağınız tüm sesler ile resimler birbiri ile uyumludur. Yani örneğin eğer bir kedi sesi duyduysanız kedi resmi ile karşılaşacaksınız. Düzgün resmin olduğu tarafı hızlıca belirtiniz. Hazır olduğunuzda space(boşluk) tuşu ile devam edebiliriz.
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    KeyboardComponent basla_butonu
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Instruction75
    TextComponent Instrcution100_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2.Aşama(%75 UYUMLU): Bu aşamadaki duyacağınız seslerin %75’i ile resimler birbiri ile uyumludur. Yani örneğin eğer bir kedi sesi duyduysanız %75 ihtimalle kedi resmi ile karşılaşacaksınız. Düzgün resmin olduğu tarafı hızlıca belirtiniz. Hazır olduğunuzda space(boşluk) tuşu ile devam edebiliriz.
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    KeyboardComponent basla_butonu_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Instruction50
    TextComponent Instrcution100_3
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3.Aşama (%50 UYUMLU): Bu aşamadaki duyacağınız seslerin %50’si ile resimler birbiri ile uyumludur. Yani örneğin eğer bir kedi sesi duyduysanız %50 ihtimalle kedi resmi ile karşılaşacaksınız. Düzgün resmin olduğu tarafı hızlıca belirtiniz. Hazır olduğunuzda space(boşluk) tuşu ile devam edebiliriz.
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    KeyboardComponent basla_butonu_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine InstructionNeutral
    TextComponent Instrcution100_4
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4.Aşama (Nötr): Bu son aşamadır. Bu aşamada herhangi bir ses duymayacaksınız. Yalnızca önceki aşamalarda olduğu gibi düzgün resmin olduğu tarafı bulmaya çalışınız. Hazır olduğunuzda space(boşluk) tuşu ile devam edebiliriz.
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    KeyboardComponent basla_butonu_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine end_of_exp
    TextComponent Instrcution100_5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    KeyboardComponent basla_butonu_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Instruction_Deney
    KeyboardComponent basla_butonu_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent genel_instruction
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Deneyimize katıldığınız için teşekkür ederiz. Birazdan başlayacak olan deney her biri 4 aşamadan oluşan testler halindedir. Bu aşamalar %100 uyumlu (60 test), %75 uyumlu (240 test), %50 uyumlu (240 test) ve nötr (işitsel ipucunun bulunmadığı durum, 60 test) şeklinde karışık bir şekilde karşınıza çıkacaktır. Deney süresince toplam 600 teste maruz kalacaksınız.
        Öncelikle testler boyunca sizden ekranın ortasında duran sabit noktaya bakmanızı isteyeceğiz.
        Bu deneyde ilk olarak 2 saniye boyunca erkek, kadın, kedi veya köpek seslerinden birini duyacaksınız. Hemen ardından çok çok kısa bir süre içinde ekranın bir tarafında düzgün bir resim diğer tarafında ise düzgün olmayan puzzle halinde parçalara ayrılıp karıştırılmış bir resim göreceksiniz. Çok kısa süren bu kısımın ardından tekrar çok çok kısa bir süre için (64 milisaniye) ekranın her iki tarafında puzzle halindeki resimleri göreceksiniz. Bu resimler az önce görmüş olduğunuz resimler ile aynı olacaktır. Ardından boş ekran gelecek ve sizden mümkün olduğunca hızlı bir şekilde ilk gördüğünüz düzgün resmin ekranın hangi tarafında olduğunu belirtmeniz istenecektir. Örneğin: düzgün olan resmi ekranın sağ tarafında gördüyseniz sağ tuşa basınız. Bir sonraki ekranda ise verdiğiniz cevabın doğruluğu ile ilgili bilgiyi göreceksiniz. Bu bilgiyi gördükten sonra hemen otomatik olarak aynı sürece devam edeceksiniz.
        Tüm testler sona erdikten sonra ekranda deneyin bittiğine dair bir yazı çıkacaktır. Hazır olduğunuzda space(boşluk) tuşu ile deneme testine geçebiliriz.
Flow
  Routine Instruction_Deney
  LoopInitiator deneme loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = congruent100.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cueFile': 'Sounds/malem_01.wav', 'targetFile': 'images/malem_01.png', 'maskFile': 'images/malem_01_puzzle.png'},
      {'cueFile': 'Sounds/malem_01.wav', 'targetFile': 'images/malem_02.png', 'maskFile': 'images/malem_02_puzzle.png'},
      {'cueFile': 'Sounds/malem_01.wav', 'targetFile': 'images/malem_03.png', 'maskFile': 'images/malem_03_puzzle.png'},
      {'cueFile': 'Sounds/malem_01.wav', 'targetFile': 'images/malem_04.png', 'maskFile': 'images/malem_04_puzzle.png'},
      {'cueFile': 'Sounds/malem_01.wav', 'targetFile': 'images/malem_05.png', 'maskFile': 'images/malem_05_puzzle.png'},
      {'cueFile': 'Sounds/women_01.wav', 'targetFile': 'images/women_01.png', 'maskFile': 'images/women_01_puzzle.png'},
      {'cueFile': 'Sounds/women_01.wav', 'targetFile': 'images/women_02.png', 'maskFile': 'images/women_02_puzzle.png'},
      {'cueFile': 'Sounds/women_01.wav', 'targetFile': 'images/women_03.png', 'maskFile': 'images/women_03_puzzle.png'},
      {'cueFile': 'Sounds/women_01.wav', 'targetFile': 'images/women_04.png', 'maskFile': 'images/women_04_puzzle.png'},
      {'cueFile': 'Sounds/women_01.wav', 'targetFile': 'images/women_05.png', 'maskFile': 'images/women_05_puzzle.png'},
      {'cueFile': 'Sounds/ancat_01.wav', 'targetFile': 'images/ancat_01.png', 'maskFile': 'images/ancat_01_puzzle.png'},
      {'cueFile': 'Sounds/ancat_01.wav', 'targetFile': 'images/ancat_02.png', 'maskFile': 'images/ancat_02_puzzle.png'},
      {'cueFile': 'Sounds/ancat_01.wav', 'targetFile': 'images/ancat_03.png', 'maskFile': 'images/ancat_03_puzzle.png'}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
    Routine Validity100Trial
    Routine Response100
    Routine Feedback100
  LoopTerminator deneme
  Routine Instruction100
  LoopInitiator Loop100 loopType="TrialHandler"
    conditionsFile = congruent100.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'cueFile': 'Sounds/malem_01.wav', 'targetFile': 'images/malem_01.png', 'maskFile': 'images/malem_01_puzzle.png'},
      {'cueFile': 'Sounds/malem_01.wav', 'targetFile': 'images/malem_02.png', 'maskFile': 'images/malem_02_puzzle.png'},
      {'cueFile': 'Sounds/malem_01.wav', 'targetFile': 'images/malem_03.png', 'maskFile': 'images/malem_03_puzzle.png'},
      {'cueFile': 'Sounds/malem_01.wav', 'targetFile': 'images/malem_04.png', 'maskFile': 'images/malem_04_puzzle.png'},
      {'cueFile': 'Sounds/malem_01.wav', 'targetFile': 'images/malem_05.png', 'maskFile': 'images/malem_05_puzzle.png'},
      {'cueFile': 'Sounds/women_01.wav', 'targetFile': 'images/women_01.png', 'maskFile': 'images/women_01_puzzle.png'},
      {'cueFile': 'Sounds/women_01.wav', 'targetFile': 'images/women_02.png', 'maskFile': 'images/women_02_puzzle.png'},
      {'cueFile': 'Sounds/women_01.wav', 'targetFile': 'images/women_03.png', 'maskFile': 'images/women_03_puzzle.png'},
      {'cueFile': 'Sounds/women_01.wav', 'targetFile': 'images/women_04.png', 'maskFile': 'images/women_04_puzzle.png'},
      {'cueFile': 'Sounds/women_01.wav', 'targetFile': 'images/women_05.png', 'maskFile': 'images/women_05_puzzle.png'},
      {'cueFile': 'Sounds/ancat_01.wav', 'targetFile': 'images/ancat_01.png', 'maskFile': 'images/ancat_01_puzzle.png'},
      {'cueFile': 'Sounds/ancat_01.wav', 'targetFile': 'images/ancat_02.png', 'maskFile': 'images/ancat_02_puzzle.png'},
      {'cueFile': 'Sounds/ancat_01.wav', 'targetFile': 'images/ancat_03.png', 'maskFile': 'images/ancat_03_puzzle.png'}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
    Routine Validity100Trial
    Routine Response100
    Routine Feedback100
  LoopTerminator Loop100
  Routine Instruction75
  LoopInitiator Loop75 loopType="TrialHandler"
    conditionsFile = congruent75.xlsx
    loopType = random
    nReps = 2
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    conditions:
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    Routine Validity75Trial
    Routine Response75
    Routine Feedback75
  LoopTerminator Loop75
  Routine Instruction50
  LoopInitiator Loop50 loopType="TrialHandler"
    conditionsFile = congruent50.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Validity50Trial
    Routine Response50
    Routine Feedback50
  LoopTerminator Loop50
  Routine InstructionNeutral
  LoopInitiator LoopNeutral loopType="TrialHandler"
    conditionsFile = c_neutral.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cueFile': None, 'targetFile': 'images/malem_01.png', 'maskFile': 'images/malem_01_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/malem_02.png', 'maskFile': 'images/malem_02_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/malem_03.png', 'maskFile': 'images/malem_03_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/malem_04.png', 'maskFile': 'images/malem_04_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/malem_05.png', 'maskFile': 'images/malem_05_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/women_01.png', 'maskFile': 'images/women_01_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/women_02.png', 'maskFile': 'images/women_02_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/women_03.png', 'maskFile': 'images/women_03_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/women_04.png', 'maskFile': 'images/women_04_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/women_05.png', 'maskFile': 'images/women_05_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/ancat_01.png', 'maskFile': 'images/ancat_01_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/ancat_02.png', 'maskFile': 'images/ancat_02_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/ancat_03.png', 'maskFile': 'images/ancat_03_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/ancat_04.png', 'maskFile': 'images/ancat_04_puzzle.png'},
      {'cueFile': None, 'targetFile': 'images/ancat_05.png', 'maskFile': 'images/ancat_05_puzzle.png'}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
    Routine NeutralTrial
    Routine ResponseNeutral
    Routine FeedbackNeutral
  LoopTerminator LoopNeutral
  Routine end_of_exp
